PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = sounddevice
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1020, 500]
  expName = Oddball_task
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    CodeComponent code
      Code Type = Py
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet
        import time
      Begin Experiment:
        #event ids
        start = 0
        end = 1

        info = StreamInfo(name='LSL_Markers', type='Markers', channel_count=1,
                          channel_format='int32', source_id='Psychopy Markers')
        # Initialize the stream.
        outlet = StreamOutlet(info)

        # ISI
        fixDur = 0
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this task you will be required to categorise the presented stimuli depending on the tone. Don't press any key for the standard tone (1000 Hz) and press 't' for the target tone (1200 Hz). This is a practice trail and feedback will be provided. Press 'space' to continue. Press 'esc' to exit the experiment.
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    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback
    CodeComponent feedback_code
      Code Type = Py
      Begin Routine:
        if response.corr:#stored on last run routine
          msg="Correct"
        else:
          msg="Incorrect"
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine Trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        flag_start = True
        flag_end = True

        fixDur = 2 + (6 - 2) * random()
      Each Frame:
        if sound_1.status == STARTED and flag_start == True:
            print(int(sound_1.freq))
            flag_start = False
            outlet.push_sample(x=[int(sound_1.freq)])

        if sound_1.status == FINISHED and flag_end == True:
            flag_end = False
            outlet.push_sample(x=[end])
            print('****')
      End Routine:
        thisExp.addData("FixDur", fixDur)
    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
      text = +
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    ImageComponent image
      disabled = True
      image [set every repeat] = $picture
      pos [set every repeat] = $location
      size = (0.2, 0.2)
      startVal [time (s)] = 1
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    KeyboardComponent response
      allowedKeys = 'None','t'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      storeCorrect = True
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    SoundComponent sound_1
      sound [set every repeat] = C:/Users/elpid/Downloads/40hz_tone.wav
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1
      volume = 0.8
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  Routine Instructions_2
    TextComponent instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the end of practice trials and start of experimental trials. Feedback will not be provided anymore.
        Don't press any key for the standard tone (1000 Hz) and press 't' for the target tone (1200 Hz). Press 'space' to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of the experiment.

        Thank you for your time.
    KeyboardComponent exit_exp
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine Rest
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Rest
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Flow
  Routine Instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = aud_conditions3.xlsx
    loopType = random
    nReps = 100
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    conditions:
      [{'trial': 'standard', 'file': "soundFiles/1000Hz_-3dBFS_3s_44.1kHz.wav'", 'corrAns': 'None', 'tone': 40},
      {'trial': 'standard', 'file': "soundFiles/1000Hz_-3dBFS_3s_44.1kHz.wav'", 'corrAns': 'None', 'tone': 40},
      {'trial': 'standard', 'file': "soundFiles/1000Hz_-3dBFS_3s_44.1kHz.wav'", 'corrAns': 'None', 'tone': 40},
      {'trial': 'target', 'file': "soundFiles/1200Hz_-3dBFS_3s_44.1kHz.wav'", 'corrAns': 't', 'tone': 60}]
    Routine Trial
  LoopTerminator trials_2
  Routine End
